CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:300
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:Slice
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Slice
    Name the output image:RescaledSlice
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Custom
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    Upper intensity limit for the input image:0.5
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    Intensity range for the output image:0.0,1.0
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
Smooth:[module_num:6|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
    Select the input image:RescaledSlice
    Name the output image:MedianFilter
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
Smooth:[module_num:7|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
    Select the input image:MedianFilter
    Name the output image:EdgePreservingSmooth
    Select smoothing method:Smooth Keeping Edges
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:30
    Edge intensity difference:0.1
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:EdgePreservingSmooth
    Name the output image:Speckles
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Speckles
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):4,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:Speckles
    Select objects to measure:Nuclei

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:12|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
    Select the objects to filter:Nuclei
    Name the output objects:FilteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_Speckles
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Speckles
    Filter using a minimum measurement value?:Yes
    Minimum value:0.2
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:EdgePreservingSmooth
    Name the output image:Overlay_EPS
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:FilteredNuclei

ExpandOrShrinkObjects:[module_num:14|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
    Select the input objects:FilteredNuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:ShrunkenNuclei
    Name the output image:ShrunkenNucleiOutlines
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:Overlay_EPS
    Select method for constructing file names:From image filename
    Select image name for file prefix:Slice
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overLay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:EdgePreservingSmooth
    Select method for constructing file names:From image filename
    Select image name for file prefix:Slice
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_smooth
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:ShrunkenNucleiOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Slice
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:20|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/home/lchung
    Cluster root path:/home/lchung
